PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_keypress_overlap
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        kb = keyboard.Keyboard()
        listKey=[]
        R_Duration = 0
        L_Duration = 0
        Up_Duration = 0
        D_Duration = 0
        SeveralPress_Duration = 0
        Null_Duration = 0
        Other_Duration = 0
      Each Frame:
        keys = kb.getKeys(clear = True)
        # wait for keypresses here
        for key in keys:
            if key.name =='q':  # it is equivalent to the string 'q'
                core.quit()

        if len(keys)> 0:# if a key has been pressed
            for key in keys:
                if key.duration is not None:#This checks if the key is already released
                    KeyEnd = key.rt+ key.duration
                    listKey.append([key.name, key.rt, KeyEnd])
      End Routine:
        # Sort list by start of keypress (by defaut sort by end of keypress)
        listKey.sort(key = lambda x: x[1])

        thisExp.addData('listKey', listKey)

        ####################################################

        time_event_happen =[]
        for ev in listKey:
            time_event_happen.append(ev[1])
            time_event_happen.append(ev[2])

        time_event_happen = list(set(time_event_happen))
        time_event_happen.sort()

        Interval_Key = []
        for time_1, time_2 in zip(time_event_happen[:-1], time_event_happen[1:]):
            Interval = [time_1, time_2]
            for ev in listKey: # ev[0] : touch, ev[1]: rt(start), ev[2]:End
                if (time_1 <= ev[1] < time_2) or (time_1 < ev[2] <= time_2):
                    Interval.append(ev[0])
            Interval_Key.append(Interval)

        for ev in Interval_Key:# ev[0] :rt(start), ev[1]: End, ev[2] and more : keypress (if key was press)
            if len(ev) == 2:# just ev[0] and ev[1] exist
                ev.append('Null')

        Interval_Key2 = Interval_Key.copy()
        for ev in Interval_Key2:
            if len(ev) > 3 :
                ev.insert(0, 'Double')
            else :
                ev.insert(0, ev[2])

        # add duration
        for ev in Interval_Key2: # ev[0]: state, ev[1] : rt(start), ev[2]: End, ev[3] and more : keypress
            duration_ev = ev[2] - ev[1]# duration = end - start(rt)
            ev.insert(2, duration_ev)
            # now : ev[0]: state, ev[1] : rt(start), ev[2]: duration, ev[3] : end, ev[4] and more : keypress

        thisExp.addData('Interval_Key2', Interval_Key2)
        ##################################################

        for ev in Interval_Key2:
            if ev[0] == 'up':
                Up_Duration = Up_Duration +ev[2]
            elif ev[0] == 'right':
                R_Duration = R_Duration +ev[2]
            elif ev[0] == 'left':
                L_Duration = L_Duration + ev[2]
            elif ev[0] == 'down':
                D_Duration = D_Duration + ev[2]
            elif ev[0] == 'Double':
                SeveralPress_Duration = SeveralPress_Duration + ev[2]
            elif ev[0] == 'Null':
                Null_Duration = Null_Duration + ev[2]
            else :
                Other_Duration = Other_Duration + ev[2]

        thisExp.addData('Up_Duration', Up_Duration)
        thisExp.addData('R_Duration', R_Duration)
        thisExp.addData('L_Duration', L_Duration)
        thisExp.addData('D_Duration', D_Duration)
        thisExp.addData('SeveralPress_Duration', SeveralPress_Duration)
        thisExp.addData('Null_Duration', Null_Duration)
        thisExp.addData('Other_Duration', Other_Duration)
    GratingComponent grating
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      tex = sin
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Flow
  Routine trial
